PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.1.4
  Window size (pixels) = [1440, 900]
  color = -1.0000, -1.0000, -1.0000
  expName = lab10
  keyboardBackend = ioHub
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Routines
  Routine setup
    CodeComponent code_setup
      Code Type = Auto->JS
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      Begin Experiment:
        fix_time = .5
        beep_dur = .01
        flash_dur = .01
        beep_delay = .058
        flash_delay = .07

        trial_n = 5
        block_n = 6
        block_count = 1

        win.mouseVisible = False

        flash_resp = [[0]*3 for i in range(3)]
        beep_resp = [0 for i in range(3)]
  Routine final
    CodeComponent code_end
      Code Type = Auto->JS
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      Begin Routine:
        msg_1 = 'Number of beeps\n'
        msg_2 = 'Number of perceived flashes\n'
        msg_3 = 'Number of flashes\n'
        msg_4 = 'Number of beeps\n'
        msg_5 = 'Number of perceived flashes\n'

        for i in range(3):
            msg_1 += f"{i}\n"

        for i in range(3):
            msg_2 += f"{round(beep_resp[i]/(trial_n*3*block_n), 2)}\n"

        for i in range(3):
            for j in range(3):
                msg_3 += f"{i}\n"
                msg_4 += f"{j}\n"
                msg_5 += f"{round(flash_resp[i][j]/(trial_n*block_n), 2)}\n"

        #thisExp.addData("Discrimination Across",  round(across_acc/across_trial_n, 2))
    TextComponent end_text
      letterHeight = 0.05
      pos = (0, .4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Results:
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    TextComponent end_text_1
      letterHeight = 0.03
      pos = (-.2,.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_1
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    TextComponent end_text_2
      letterHeight = 0.03
      pos = (.2,.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_2
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    TextComponent end_text_3
      letterHeight = 0.03
      pos = (-.3,-.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_3
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    TextComponent end_text_4
      letterHeight = 0.03
      pos = (0,-.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_4
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    TextComponent end_text_5
      letterHeight = 0.03
      pos = (.35,-.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_5
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    TextComponent end_text_space
      letterHeight = 0.05
      pos = (0, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Record this result.

        Press SPACE when you are ready to end the experiment.
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 120
      store = nothing
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  Routine fixation
    PolygonComponent fixation_stim
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fix_time
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  Routine feedback
    TextComponent feedback_text1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedback_msg
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    TextComponent feedback_text2
      letterHeight = 0.05
      pos = (0, -.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent key_resp_feedback
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end_practice
    TextComponent end_practice_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have finished the practice!

        Now it's time to begin the real experimental trials. These will be exactly the same as what you just practiced, but you will no longer receive feedback.

        You will see a screen encouraging you to take a break at several times during the experiment. When you have completed all trials, you will see your accuracy results. Record these results and report them to your instructor.

        If you have any questions, please ask your instructor now.

        Press SPACE when you are ready to begin.
    KeyboardComponent key_resp_end_prac
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      store = nothing
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        flash_resp = [[0]*3 for i in range(3)]
        beep_resp = [0 for i in range(3)]
  Routine get_ready
    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Ready?

        Press SPACE to start.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions
    TextComponent instruct_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        During this experiment, you will see flashing circles on the screen. Your job is to identify how many flashing circles you saw. Sometimes you will also hear beeps. Please make sure that you have the sound on your computer turned on.

        During the trial, you will first see a cross in the center of the screen. This is your warning that the sound is about to appear and that you should get ready. Next, you will see 0, 1, or 2 flashing circles and hear 0, 1, or 2 beeps. Then, you will see the response screen. When you see the response screen, press the number key 0, 1, or 2 to indicate how many flashing circles you saw.

        Let's try a few practice trials.

        Press SPACE to begin the practice.
    KeyboardComponent key_resp_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      store = nothing
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  Routine trial
    PolygonComponent stim_flash_1
      fillColor = white
      opacity [set every repeat] = flash_play_1
      saveStartStop = False
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $flash_dur
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    PolygonComponent stim_flash_2
      fillColor = white
      opacity [set every repeat] = flash_play_2
      saveStartStop = False
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = $flash_dur+flash_delay
      stopVal [duration (s)] = $flash_dur
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    SoundComponent sound_1
      saveStartStop = False
      sound = 750
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $beep_dur
      volume [set every repeat] = beep_play_1
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    SoundComponent sound_2
      saveStartStop = False
      sound = 750
      startVal [time (s)] = $beep_dur + beep_delay
      stopVal [duration (s)] = $beep_dur
      volume [set every repeat] = beep_play_2
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  Routine end_block
    CodeComponent block_end_code
      Code Type = Auto->JS
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      Begin Routine:
        block_msg = "You have reached the end of block " + str(block_count) + " of " + str(block_n) + "."
      End Routine:
        block_count += 1
    TextComponent block_message1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_msg
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    TextComponent block_message2
      letterHeight = 0.05
      pos = (0, -.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please take a short break.

        Press SPACE when you are ready to continue.
    KeyboardComponent key_resp_block_cont
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine response
    CodeComponent code_response
      Code Type = Auto->JS
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      End Routine:
        feedback_msg = ''
        if (key_resp.corr == 1):
            feedback_msg = f"Correct!"
        else:
            feedback_msg = f"Incorrect."

        if (flash_n == 1):
            feedback_msg += f" There was {flash_n} flash."
        else:
            feedback_msg += f" There were {flash_n} flashes."

        flash_resp[flash_n][beep_n] += int(key_resp.keys)
        beep_resp[beep_n] += int(key_resp.keys)
    KeyboardComponent key_resp
      allowedKeys = '0','1','2'
      correctAns = $flash_n
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How many flashes?
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Flow
  Routine setup
  Routine instructions
  LoopInitiator trials_prac loopType="TrialHandler"
    conditionsFile = stim_conds.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('cond', 0), ('flash_n', 1), ('flash_play_1', 1), ('flash_play_2', 0), ('beep_n', 0), ('beep_play_1', 0), ('beep_play_2', 0)]),
      OrderedDict([('cond', 1), ('flash_n', 2), ('flash_play_1', 1), ('flash_play_2', 1), ('beep_n', 0), ('beep_play_1', 0), ('beep_play_2', 0)]),
      OrderedDict([('cond', 2), ('flash_n', 0), ('flash_play_1', 0), ('flash_play_2', 0), ('beep_n', 1), ('beep_play_1', 1), ('beep_play_2', 0)]),
      OrderedDict([('cond', 3), ('flash_n', 1), ('flash_play_1', 1), ('flash_play_2', 0), ('beep_n', 1), ('beep_play_1', 1), ('beep_play_2', 0)]),
      OrderedDict([('cond', 4), ('flash_n', 2), ('flash_play_1', 1), ('flash_play_2', 1), ('beep_n', 1), ('beep_play_1', 1), ('beep_play_2', 0)]),
      OrderedDict([('cond', 5), ('flash_n', 0), ('flash_play_1', 0), ('flash_play_2', 0), ('beep_n', 2), ('beep_play_1', 1), ('beep_play_2', 1)]),
      OrderedDict([('cond', 6), ('flash_n', 1), ('flash_play_1', 1), ('flash_play_2', 0), ('beep_n', 2), ('beep_play_1', 1), ('beep_play_2', 1)]),
      OrderedDict([('cond', 7), ('flash_n', 2), ('flash_play_1', 1), ('flash_play_2', 1), ('beep_n', 2), ('beep_play_1', 1), ('beep_play_2', 1)])]
    Routine fixation
    Routine trial
    Routine response
    Routine feedback
  LoopTerminator trials_prac
  Routine end_practice
  LoopInitiator blocks loopType="TrialHandler"
    loopType = random
    nReps = block_n
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = stim_conds.csv
      loopType = random
      nReps = trial_n
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      conditions:
        [OrderedDict([('cond', 0), ('flash_n', 1), ('flash_play_1', 1), ('flash_play_2', 0), ('beep_n', 0), ('beep_play_1', 0), ('beep_play_2', 0)]),
        OrderedDict([('cond', 1), ('flash_n', 2), ('flash_play_1', 1), ('flash_play_2', 1), ('beep_n', 0), ('beep_play_1', 0), ('beep_play_2', 0)]),
        OrderedDict([('cond', 2), ('flash_n', 0), ('flash_play_1', 0), ('flash_play_2', 0), ('beep_n', 1), ('beep_play_1', 1), ('beep_play_2', 0)]),
        OrderedDict([('cond', 3), ('flash_n', 1), ('flash_play_1', 1), ('flash_play_2', 0), ('beep_n', 1), ('beep_play_1', 1), ('beep_play_2', 0)]),
        OrderedDict([('cond', 4), ('flash_n', 2), ('flash_play_1', 1), ('flash_play_2', 1), ('beep_n', 1), ('beep_play_1', 1), ('beep_play_2', 0)]),
        OrderedDict([('cond', 5), ('flash_n', 0), ('flash_play_1', 0), ('flash_play_2', 0), ('beep_n', 2), ('beep_play_1', 1), ('beep_play_2', 1)]),
        OrderedDict([('cond', 6), ('flash_n', 1), ('flash_play_1', 1), ('flash_play_2', 0), ('beep_n', 2), ('beep_play_1', 1), ('beep_play_2', 1)]),
        OrderedDict([('cond', 7), ('flash_n', 2), ('flash_play_1', 1), ('flash_play_2', 1), ('beep_n', 2), ('beep_play_1', 1), ('beep_play_2', 1)])]
      Routine fixation
      Routine trial
      Routine response
    LoopTerminator trials
    Routine end_block
  LoopTerminator blocks
  Routine final
